[[model]]
name: 1-compartment TMDD Constant Target Concentration PK Model + effect compartment
author: Michael Gertz

# Initial values:
PKCompartment.Aa = 0
PKCompartment.A1_f = 0
PKCompartment.A2 = 0
PKCompartment.AT1_f = PKCompartment.CT1_0*PKCompartment.V1
PKCompartment.ADT1 = 0
PKCompartment.AUC1_f = 0
PKCompartment.AUC1_b = 0
PKCompartment.AUC1_t = 0
PKCompartment.AUCT1_f = 0
PKCompartment.AUCT1_b = 0
PKCompartment.AUCT1_t = 0
PKCompartment.AUCe = 0
PKCompartment.Ce = 0

[environment]
t = 0 in [h] bind time


[PKCompartment]

tlag = 1 in [h]
	desc: absorption lag time from extravasc compartment

ka = 1 in [1/h]
    desc: first order absorption rate constant  

F = 1 in [dimensionless]
    desc: fraction absorbed 
	
V1 = 1 in [L/kg]
    desc: Volume of the central compartment	

V2 = 1 in [L/kg]
    desc: Volume of the peripheral compartment	

Q1 = 1 in [L/h/kg]
	desc: intercompartmental clearance between central and peripheral compartment	
	
CL = 1 in [L/h/kg]
    desc: Linear clearance from central compartment 

CT1_0 = 1 in [pmol/L]
	desc: baseline concentration of the target in the central compartment

KD = 1 in [pmol/L]
	desc: Dissociation constant 

koff = 1 in [1/h]
	desc: dissociation rate constant
	
kdeg = 1 in [1/h]
	desc: target degradation rate constant
	
ke0 = 1 in [1/h]
	desc: equilibration rate constant effect compartment
	
Kp = 1 in [dimensionless]
	desc: effect compartment to plasma partitioning coefficient
	
kint = kdeg in [1/h]
	desc: complex internalization rate constant
	
kon = koff/KD in [1/h*L/pmol]
	desc: secondary parameter, associate rate constant (2nd order)

C1_f = A1_f/V1 in [pmol/L]
    desc: Free concentration of drug in the central compartment
	
C1_b = ADT1/V1 in [pmol/L]
    desc: Bound concentration of drug in the central compartment
	
C1_t = (A1_f + ADT1)/V1 in [pmol/L]
    desc: Total concentration of drug in the central compartment
	
C2 = A2/V2 in [pmol/L]	
	desc: free concentration of drug in the peripheral compartment	
	
CT1_f = AT1_f/V1 in [pmol/L]	
	desc: Free concentration of target in the central compartment
	
CT1_b = ADT1/V1 in [pmol/L]	
	desc: Bound concentration of target in the central compartment
	
CT1_t = (AT1_f + ADT1)/V1 in [pmol/L]	
	desc: Total concentration of target in the central compartment	
	
RO_Model = CT1_b/CT1_t*100 in [dimensionless]
	desc: Receptor (Target) occupancy
	
PerInh = (1-CT1_f/CT1_t)*100 in [dimensionless]
	desc: Percent inhbition relative to total target	
	
PerInh_Baseline = (1-CT1_f/CT1_0)*100 in [dimensionless]	
	desc: Percent inhibition relative to the initial steady-state level of target

dot(Aa) = -ka*Aa in [pmol/kg] 
    desc: Amount of drug in 'depo' compartment

dot(A1_f) =  ka*Aa*F -CL*C1_f -Q1*(C1_f - C2) -kon*C1_f*CT1_f*V1 +koff*ADT1 in [pmol/kg] 
    desc: Amount of free drug in central compartment 
	
dot(A2) = Q1*(C1_f - C2) in [pmol/kg] 	
	desc: Amount of free drug in the peripheral compartment	
	
dot(AT1_f) = kdeg*(CT1_0 - CT1_f) -kon*C1_f*CT1_f*V1 +koff*ADT1 in [pmol/kg] 
	desc: Amount of free target in central compartment

dot(ADT1) = kon*C1_f*CT1_f*V1 -(koff+kint)*ADT1 in [pmol/kg] 
	desc: Amount of bound drug/ target in central compartment

dot(Ce) = ke0*(C1_f*Kp - Ce) in [pmol/L] 	
	desc: Concentration of drug in effect compartment
	
dot(AUC1_f)= C1_f in [pmol/L*h]
	desc: Free AUC of drug in central the compartment
	
dot(AUC1_b)= C1_b in [pmol/L*h]
	desc: Bound AUC of drug in the central compartment

dot(AUC1_t)= C1_t in [pmol/L*h]
	desc: Total AUC of drug in central the central compartment	
	
dot(AUCT1_f)= CT1_f in [pmol/L*h]
	desc: Free AUC of the target in the central compartment
	
dot(AUCT1_b)= CT1_b in [pmol/L*h]
	desc: Bound AUC of the target in the central compartment

dot(AUCT1_t)= CT1_t in [pmol/L*h]
	desc: Total AUC of the target in the central compartment	
	
dot(AUCe)= Ce in [pmol/L*h]
	desc: Free AUC of drug in the effect compartment